PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = EMS-TMR_cueingv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine startup_code
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    CodeComponent start_up
      Code Type = Py
      Begin Experiment:
        import pandas as pd

        subj_id = f"{int(expInfo['participant']):02d}"

        df_cueing = pd.read_excel(f"sequences/{subj_id}_cues.xlsx")


        #variables we will access later
        pink_noise = sound.Sound(f'stimuli/PinkNoise-60min.mp3', stereo= True, hamming=True, secs=-1, sampleRate= 24000)
        cue = sound.Sound(f'A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)
        cue.stop()
        n_trials = 99
        n_noise = 99
        i_cueing = 0
        cue_repetition = 0
    CodeComponent function
      Code Type = Py
      Begin Experiment:
        import os.path as osp

        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]

        # define a log function that flushes directly
        def log(*msgs, sep=' ', end='\n'):
            print(*msgs, sep=sep, end=end, flush=True)
    CodeComponent settings
      Code Type = Py
      Begin Experiment:
        #trigger?
  Routine cueing
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if i_cueing == 33:
            i_cueing = 0
            cue_repetition += 1
            msg += f" Cueing repeated for {cue_repetition} times"
            log (msg)

        df_trial = df_cueing.iloc[i_cueing]
        #cue.setSound("stimuli/sounds/de_" + df_trial.word + ".mp3")
        cue.play() # play the sound
        cue_text.text = df_trial.word
        # debug printing
        msg = ""
        msg += f'cue {i_cueing}/32'
        log (msg)
      Each Frame:
        if key_resp_3.keys == "b":
            continueRoutine = False
      End Routine:
        cue.stop()
        if key_resp_3.keys == "r":
            cue.volume += 1
            log ("lauter", cue.volume)
        elif key_resp_3.keys == "y":
            cue.volume -= 1
            log ("leiser", cue.volume)
        if key_resp_3.keys == "b":
            trials.finished = True
            n_noise = 1
    TextComponent cue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = dummy
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','g','r'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SoundComponent cue
      sound [set every repeat] = $"stimuli/sounds/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      volume [set every frame] = 1
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  Routine break_2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','g','r'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
  Routine pinknoise
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    SoundComponent pink_noise
      sound [set every repeat] = stimuli/PinkNoise-60min.mp3
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      volume [set every frame] = 1
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    CodeComponent code
      Code Type = Py
      Each Frame:
        if key_resp.keys == "r":
            pink_noise.volume += 1
            log ("lauter", pink_noise.volume)
        elif key_resp.keys == "y":
            pink_noise.volume -= 1
            log("leiser", pink_noise.volume)
        if key_resp.keys == "b":
            continueRoutine = False
      End Routine:
        core.wait (0.1)
    KeyboardComponent key_resp
      allowedKeys = 'y','r','b','g'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = pink_noise
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  Routine stop_cueing
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  Routine break_3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text = break
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if key_resp_4.keys == "b":
            continueRoutine = False
      Each Frame:
        if key_resp_4.keys == "b":
            continueRoutine = False

        if key_resp_4.keys == "r":
            cue.volume += 1
            log ("lauter", cue.volume)
        elif key_resp_4.keys == "y":
            cue.volume -= 1
            log ("leiser", cue.volume)
      End Routine:
        i_cueing += 1

        if key_resp_4.keys == "b":
            trials.finished=True
    KeyboardComponent key_resp_4
      allowedKeys = 'b'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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Flow
  Routine startup_code
  LoopInitiator back_to_noise loopType="TrialHandler"
    loopType = random
    nReps = n_noise
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    Routine pinknoise
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_trials
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      Routine cueing
      Routine break_3
    LoopTerminator trials
  LoopTerminator back_to_noise
