PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = EMS-TMR_encodingv1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instructions_part2
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    TextComponent instructions
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Willkommen bei der zweiten Aufgabe des Experiments.

        Hier werden dir Wort-Bild Paare präsentiert, wobei dir das Wort vorgespielt und das Bild im Anschluss visuell präsentiert wird. Deine Aufgabe ist es, sich die Wort-Bild Paare bestmöglichst zu merken.  Versuche aufmerksam zu bleiben! Deine Lernleistung wird im Anschluss abgefragt werden.

        Drücke eine beliebige Taste um fortzufahren.
    KeyboardComponent key_resp
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions = """ Welcome to the second task of the experiment.
            Here you will be presented with word-image pairs, whereby the word is played to you and the image is then presented visually. Your task is to memorize the word-picture pairs as best you can.  Try to stay attentive! Your learning performance will be tested afterwards.
           Press any key to continue."""
  Routine fixation_cross
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    TextComponent cross
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent trigger_fixation
      Code Type = Py
      Begin Routine:
        send_trigger(99, duration=0.005)
  Routine image_stimuli
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    ImageComponent encoding_img
      image = stimuli/dog/dog001.png
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        df_trial = df_encoding.iloc[i_encoding]
        log(df_trial.image)
        encoding_img.image = "stimuli/" + df_trial.image

        # set the break conditional to true to display a break
        n_break_conditional = int(i_block in breaks_after_block) # i_block in break_after_block FALSE/TRUE als int 1 oder 0

        msg = f'run: {i_encoding}/32, block: {i_block}/{n_break_blocks}'
        log(msg)
      End Routine:
        i_encoding+=1
    CodeComponent trigger_image
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category]
        send_trigger(trigger_val, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine word_stimuli
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        df_trial = df_encoding.iloc[i_encoding]
        #log(df_trial)

        #unterschiedliche Verben je nach Trial --> siehe GUI encoding_word.setSound("stimuli/sounds/de_" + df_trial.word + ".mp3")
        log(df_trial.word)
        #encoding_word.play() # play the sound
      End Routine:
        encoding_word.stop()
    SoundComponent encoding_word
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/sounds/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_5
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trigger_word
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category] + 30

        send_trigger(trigger_val, duration=0.005)
        trigger_send = False
      Each Frame:
        if encoding_word.status==FINISHED and not trigger_send:
            trigger_send = True
            send_trigger(35, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine feedback_practice
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Sie haben  sich bei 2 Paaren kein mentales Bild gemacht.\n'
            if false_alarms:
                feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
    KeyboardComponent key_resp_2
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy...somethign went wrong
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  Routine instruction_end
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Super, du hast nun alle 128 Wort-Bild Paare gesehen und versucht, dir so viele wie möglich zu merken, indem du dir jeweils ein mentales Bild des Wortes und des Bildes gebildet hast.

        Nun geht es weiter mit der nächsten Aufgabe, um das Gelernte noch weiter zu vertiefen.

        Bitte melde dich beim Experimentleiter.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text = """Great, you have now seen all 128 word-image pairs and tried to memorize as many as possible by forming a mental image of each word and image.
            Now move on to the next task to consolidate what you have learned. """
    CodeComponent trigger_end
      Code Type = Py
      Begin Routine:
        send_trigger(0, duration = 0.005)
  Routine instructions_part2_2
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Das waren jetzt 3 Beispieldurchgänge. Konntest du dir zu jedem Paar ein mentales Bild bilden?

        Die soeben gezeigten Wort-Bild Paaare gehören NICHT zu den Paaren, die du dir merken sollst.

        Im Folgenden werden dir nun alle Wort-Bild Paare gezeigt, von denen du dir so viele wie möglich merken sollst.
    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if language == "english":
            text_2 = """These were 3 sample runs. Were you able to form a mental image for each shown pair?
            The word-picture pairs just shown are NOT among the pairs that you should memorize.
            You will now be shown all the word-picture pairs, of which you should memorize as many as possible.
            Press any button to start the experiment."""
  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_encoding = 0.5
        t_isi_encoding = 2.5
        t_buffer = 10
        image_size = 0.45
        t_fixation_cross = 1.5

        #breaks after 32 trials
        breaks_after_block = [0,1,2]

        n_encoding_trials_prac = 6
        n_encoding_trials = 32
        cross_color = (-1.0000, -1.0000, -1.0000)
        cross_height = 0.1
        letter_height= 0.08
        language = "german"

        trigger_img = {}
        trigger_img['dog'] = 1
        trigger_img['car']   = 2
        trigger_img['flower']   = 3
        trigger_img['face']   = 4

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_buf_start = 61
        trigger_buf_stop = 62
        trigger_encoding_sound0 = 30
        trigger_encoding_sound1 = 31
        trigger_fixation_pre1 = 81
        trigger_fixation_pre2 = 82

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_encoding = 0
    CodeComponent startup
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()

        subj_id = f"{int(expInfo['participant']):02d}"

        df_encoding = pd.read_excel(f"sequences/{subj_id}_pairings.xlsx")
        df_encoding_prac = pd.read_excel (f"sequences/encoding_practice.xlsx")
        df_buffer = pd.read_excel (f"sequences/buffer_encoding_retrievalFeedback.xlsx")

        # set variables we will access later
        i_encoding = 0
        i_encoding_prac = 0
        i_block = 0
        i_buffer = 0

        #set sound to a different samplerate!!!
        encoding_word_prac = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)
        encoding_word = sound.Sound('A', stereo= True, hamming=True, secs=-1, sampleRate= 24000)

        # set the number of repetitions we have
        #n_encoding_trials = df_encoding.shape [0]
        #print (n_encoding_trials)
        n_encoding_trials_prac = 3
        n_break_blocks = 4
        n_buffer = 4
        if PILOTING:
            n_encoding_trials = 5

        print('DUMMY TRIALS: subj_id is set to 0')

        # set variables we will access later
        i_encoding = 0
    CodeComponent function
      Code Type = Auto->JS
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      Begin Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]


        # define a log function that flushes directly
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)
  Routine instructions_part2_1
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        if language == "english":
            instructions = """ In order to memorize the word-picture pairs better, please imagine a mental picture that contains both the word and the picture.
            Now press any key to start a practice run."""
      Begin Routine:
        image_2.image = "stimuli/mentales Bild.png"
    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Um sich die Wort-Bild Paare besser merken zu können stelle dir bitte ein Bild vor, welches sowohl das Wort, als auch das Bild enthält.







        Drücke nun eine beliebige Taste, um mit einen Beispieldurchlauf zu starten.
    ImageComponent image_2
      image = stimuli/mentales Bild.png
      pos = (0, -0.1)
      size = (1, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine word_stimuli_prac
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        df_trial_prac = df_encoding_prac.iloc[i_encoding_prac]
        log(df_trial_prac)

        #unterschiedliche Verben je nach Trial --> siehe GUI: encoding_word_prac.setSound("stimuli/practice_encoding/" + df_trial_prac.word + ".mp3")
        log(df_trial_prac.word)

        #encoding_word_prac.play() # play the sound
      End Routine:
        encoding_word_prac.stop()
    SoundComponent encoding_word_prac
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/practice_encoding/" + df_trial_prac.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_6
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trigger_practice
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial_prac.category] + 130

        send_trigger(trigger_val, duration=0.005)
        trigger_send = False
      Each Frame:
        if encoding_word_prac.status==FINISHED and not trigger_send:
            trigger_send = True
            send_trigger(135, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine image_stimuli_prac
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  Routine image_stimuli_prac_2
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        encoding_img_prac.image = "stimuli/" + df_trial_prac.image

        # debug printing
        msg = f'practice {i_encoding_prac}/3'
        log(msg)
      End Routine:
        i_encoding_prac += 1
    ImageComponent encoding_img_prac
      image = stimuli/practice_encoding/dogxxx.jpg
      size = $image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent trigger_practice_img
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial_prac.category] + 100
        send_trigger(trigger_val, duration=0.005)
  Routine break_2
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        print ("start break")
        if language == "english":
            text_4.text = """<short break>
            Please take a short breather.
            Press any button if you want to continue with the next block."""
      End Routine:
        print ("break ended")
        core.wait(0.01)  # wait so trigger can reset
    KeyboardComponent key_resp_5
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Eine kurze Pause.

        Bitte nimm eine kurze Verschnaufpause. Sobald du dich wieder bereit fühlst, drücke bitte eine beliebige Taste, um mit der Aufgabe fortzufahren.
    CodeComponent trigger_break
      Code Type = Py
      Begin Routine:
        send_trigger (111, duration = 0.005)
      End Routine:
        send_trigger (222, duration = 0.005)
        core.wait (0.02)
  Routine counting_code
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        i_block = break_blocks.thisN
  Routine buffer_primacy_word
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer]
      End Routine:
        buffer_word.stop()
    SoundComponent buffer_word
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/buffer/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_7
      color = black
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trigger_buffer
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category] + 230

        send_trigger(trigger_val, duration=0.005)
        trigger_send = False
      Each Frame:
        if buffer_word.status==FINISHED and not trigger_send:
            trigger_send = True
            send_trigger(235, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine buffer_primacy_image
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    ImageComponent image_buffer
      image = stimuli/dog/dog245.png
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer]
        log(df_trial.image)
        image_buffer.image = "stimuli/buffer/" + df_trial.image

        msg = f'run: {i_buffer}/3, buffer primacy effect'
        log(msg)
      End Routine:
        i_buffer += 1
    CodeComponent trigger_buffer_2
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category] + 200
        send_trigger(trigger_val, duration=0.005)
  Routine buffer_recency_word
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer]
      End Routine:
        buffer_word2.stop()
    SoundComponent buffer_word2
      forceEndRoutine = False
      sound [set every repeat] = $"stimuli/buffer/de_" + df_trial.word + ".mp3"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text_8
      color = black
      font = Times New Roman
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trigger_buffer_3
      Code Type = Py
      Begin Routine:
        send_trigger(230, duration = 0.005)
        trigger_send = False
      Each Frame:
        if buffer_word2.status==FINISHED and not trigger_send:
            trigger_send = True
            send_trigger(231, duration=0.005)
      End Routine:
        core.wait (0.02)
  Routine buffer_recency_image
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    ImageComponent image
      image = stimuli/face/face241.png
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = height
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        df_trial = df_buffer.iloc[i_buffer]
        log(df_trial.image)
        image.image = "stimuli/buffer/" + df_trial.image

        msg = f'run: {i_buffer}/6, buffer recency effect'
        log(msg)
      End Routine:
        i_buffer += 1
    CodeComponent trigger
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category] + 200
        send_trigger(trigger_val, duration=0.005)
  Routine instructions_headstill
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    TextComponent text_9
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Auch Schlucken kann zu Artefakten führen. Versuche bitte daher auch so wenig wie möglich während eines Durchlaufs zu schlucken.
        In den Pausen kannst du gern kurz die Augen schließen, dich etwas lockern und sogar schlucken ;)

        Sobald du bereit bist können wir mit dem Experiment starten. Drücke eine beliebige Taste um zu starten.
    KeyboardComponent key_resp_6
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent trigger_experiment_start
      Code Type = Py
      End Routine:
        send_trigger(100, duration=0.005)
        log ("practice done, encoding starting")
  Routine instructions_part2_3
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    TextComponent text_10
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Versuche bitte während des Experiments so still wie möglich zu liegen und Kopfbewegungen zu vermeiden.

        Versuche bitte auch die Augen nicht zu viel zu bewegen. Halte deinen Blick dort, wo das Fixationskreuz erscheint.

        Drücke eine Taste, um fortzufahren.
    KeyboardComponent key_resp_7
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Py
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      Begin Routine:
        if language == "english":
            text_2 = """"""
Flow
  Routine startup_code
  Routine instructions_part2
  Routine instructions_part2_1
  LoopInitiator encoding_trials_prac loopType="TrialHandler"
    loopType = sequential
    nReps = n_encoding_trials_prac
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    Routine fixation_cross
    Routine word_stimuli_prac
    Routine image_stimuli_prac_2
  LoopTerminator encoding_trials_prac
  Routine instructions_part2_2
  Routine instructions_part2_3
  Routine instructions_headstill
  LoopInitiator buffer loopType="TrialHandler"
    loopType = random
    nReps = n_buffer
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    Routine fixation_cross
    Routine buffer_primacy_word
    Routine buffer_primacy_image
  LoopTerminator buffer
  LoopInitiator break_blocks loopType="TrialHandler"
    loopType = random
    nReps = n_break_blocks
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    Routine counting_code
    LoopInitiator encoding_trials loopType="TrialHandler"
      loopType = random
      nReps = n_encoding_trials
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      Routine fixation_cross
      Routine word_stimuli
      Routine image_stimuli
    LoopTerminator encoding_trials
    LoopInitiator break_conditional loopType="TrialHandler"
      loopType = random
      nReps = n_break_conditional
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      Routine break_2
    LoopTerminator break_conditional
  LoopTerminator break_blocks
  LoopInitiator buffer2 loopType="TrialHandler"
    loopType = random
    nReps = n_buffer
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    Routine fixation_cross
    Routine buffer_recency_word
    Routine buffer_recency_image
  LoopTerminator buffer2
  Routine instruction_end
