PsychoPy2experiment version="2024.2.1"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1400, 1050]
  color = 1.0000, 1.0000, 1.0000
  consoleLoggingLevel = data
  expName = EMS-TMR-localizer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine localizer
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    ImageComponent localizer_img
      durationEstim = 1
      image = stimuli/face/face000.png
      size = $image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
      units = height
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    TextComponent localizer_isi
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 1.5
      letterHeight = letter_height
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer
      allowedKeys = 'y', 'g', 'b', 'r'
      durationEstim = 1.5
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.2
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    CodeComponent localizer_code
      Code Type = Py
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      Begin Routine:
        df_block = df_localizer[df_localizer['block']==i_block].reset_index(drop = True)
        df_trial = df_block.iloc[i_localizer]

        localizer_img.image = "stimuli/" + df_trial.image
        t_isi_localizer = df_trial.iti

        is_distractor = df_trial.distractor

        # prevent inactive sound from blocking trial finish
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
        played = False

        if is_distractor:
            localizer_img.ori  = 180 #image flipped
        else:
            localizer_img.ori  = 0

        msg = f'block {i_block}/{n_blocks}-1 trial {i_localizer}/{len(df_block)}'
        msg += f' {"[FLIPPED]" if is_distractor else ""} isi={t_isi_localizer:.2f}s'
        print(msg)

        # set the break conditional to true to display a break
        break_conditional_nReps = int(i_block in breaks_after_block)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer.keys) and not played:
            played = True
            send_trigger(55, duration=0.005)
            if is_distractor:
                sound_correct.play()
                log('Correct press')
                responslog.write(session = "localizer",trial_num= i_localizer, trial_type= "distractor", response='press', response_type='correct_dis')
            else:
                sound_wrong.play()
                false_alarms += 1
                log('False alarm')
                responslog.write(session = "localizer",trial_num= i_localizer, trial_type= "distractor", response='press', response_type='false_alarm')

        # play error in case of missed button press
        if is_distractor and key_resp_localizer.status==FINISHED and not played:
            played = True
            sound_wrong.play()
            misses += 1
            log('Miss')
            responslog.write(session = "localizer",
                            trial_num= i_localizer,
                            trial_type= "distractor",
                            response='no_press',
                            response_type='miss')


        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
      End Routine:
        if not is_distractor and key_resp_localizer.status==FINISHED and not played:
            responslog.write(session = "localizer",
                            trial_num= i_localizer,
                            trial_type= "no_distractor",
                            response='no_press',
                            response_type='correct')

        i_localizer+=1
    CodeComponent trigger_localizer
      Code Type = Py
      Begin Routine:
        trigger_cat = {'dog': 1, 'house': 2, 'face': 3, 'flower':4}
        trigger_val = trigger_cat[df_trial.category] + (100 if df_trial.distractor else 0)
        send_trigger(trigger_val, duration=0.005)
    SoundComponent sound_wrong
      forceEndRoutine = False
      sound [set every repeat] = stimuli/soundError.wav
      startEstim = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_correct
      forceEndRoutine = False
      sound [set every repeat] = stimuli/soundCoin.wav
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine sequence
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    ImageComponent sequence_img_1
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_1
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.1
      startVal [condition] = $sequence_img_1.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_2
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.164
      startVal [condition] = $sequence_isi_1.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_2
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.264
      startVal [condition] = $sequence_img_2.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_3
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.328
      startVal [condition] = $sequence_isi_2.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_3
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.428
      startVal [condition] = $sequence_img_3.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_4
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.492
      startVal [condition] = $sequence_isi_3.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_4
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.592
      startVal [condition] = $sequence_img_4.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    ImageComponent sequence_img_5
      durationEstim = 0.1
      size = $image_size
      startEstim = 0.656
      startVal [condition] = $sequence_isi_4.status==FINISHED
      stopVal [duration (s)] = $t_img_sequence
      units = height
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    TextComponent sequence_isi_5
      color = $dot_color
      durationEstim = 0.064
      letterHeight = letter_height
      startEstim = 0.756
      startVal [condition] = $sequence_img_5.status==FINISHED
      stopVal [duration (s)] = $t_isi
      text = •
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    CodeComponent sequence_code
      Code Type = Py
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      Begin Routine:
        for img_x in range(5):
            component_img = locals()[f'sequence_img_{img_x+1}']
            component_img.image = df_trial[f'img{img_x}']

        img_started = [0, 0, 0, 0, 0]
      Each Frame:
        for img_x, state in enumerate(img_started):
            if state: continue
            component_img = locals()[f'sequence_img_{img_x+1}']
            if component_img.status==STARTED:
                img_started[img_x] = 1
                img_id = trigger_img[get_image_name(component_img.image)]
      End Routine:
        i_sequence += 1
    KeyboardComponent scanner_10
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $sequence_isi_5.status==FINISHED
      store = all keys
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  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_sequence = 0.1
        t_img_localizer = 1
        t_isi_localizer = 2.5
        image_size = 0.5
        t_fixation_cross = 1.5

         # show break after these trials
        breaks_after_block = [0,1,2]

        n_localizer_trials_prac = 6
        n_localizer_trials = 64
        cross_color = (-1.0000, -1.0000, -1.0000)
        cross_height = 0.1
        letter_height=0.06
        language = "german"

        trigger_img = {}
        trigger_img['dog'] = 1
        trigger_img['car']   = 2
        trigger_img['flower']   = 3
        trigger_img['face']   = 4

        trigger_break_start = 91
        trigger_break_stop = 92
        trigger_fixation = 81

        # these get added depending on the trial
        # ie. Gesicht in localizer = 1, as cue = 11, as sequence=21
        trigger_base_val_localizer = 0
        trigger_base_val_localizer_distractor = 100
    CodeComponent startup
      Code Type = Py
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      Begin Experiment:
        import pandas as pd
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()

        subj_id  = f"{int(expInfo['participant']):02d}"

        df_localizer = pd.read_excel(f"sequences/{subj_id}_localizer.xlsx")
        df_localizer_prac = pd.read_excel (f"sequences/localizer_practice.xlsx")

        # set variables we will access later
        i_localizer = 0
        i_block = 0

        # store answers
        false_alarms = 0
        misses = 0
        wrong_answers = 0

        # set the number of repetitions we have
        n_localizer_trials_prac = 6
        n_blocks = max(df_localizer.block)+1
        #n_localizer_trials = len(df_localizer)/4!!

        if PILOTING:
            n_localizer_trials = 5
            n_blocks = 2
            print('DUMMY TRIALS: subj_id is set to 0')
    CodeComponent functions
      Code Type = Py
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      Before Experiment:
        import os.path as osp
        def get_image_name(filename):
            return osp.splitext(osp.basename(filename))[0]

        # define a log function that flushes directly
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)
    CodeComponent save_data
      Code Type = Py
      Begin Experiment:
        import pandas as pd
        import datetime

        class ResponseLog:

            def __init__(self, filename):
                self.filename = filename
                self.df = pd.DataFrame()

            def write(self, **kwargs):
                # Add timestamp
                row_data = {'timestamp': str(datetime.datetime.now())}

                # Add all kwargs to row data
                row_data.update(kwargs)

                # Create a single-row DataFrame
                new_row = pd.DataFrame([row_data])

                # Append to existing DataFrame
                self.df = pd.concat([self.df, new_row], ignore_index=True)

                # Save to CSV
                self.df.to_csv(self.filename, index=False)

                return self.df

        responslog = ResponseLog(u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date']) + '_responses.csv')
  Routine buffer
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    TextComponent buffer_fixation
      color = $dot_color
      durationEstim = 8
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_thisbuffer
      text = •
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    CodeComponent buffer_code
      Code Type = Auto->JS
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      Begin Routine:
        sound_birds.track.start(resume=1)
      Each Frame:
        if buffer_fixation.status==FINISHED:
            sound_birds.track.stop()
    KeyboardComponent scanner_11
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $buffer_fixation.status==FINISHED
      store = all keys
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  Routine question
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    KeyboardComponent question_key_resp
      allowedKeys = 'g', 'r', 'b'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent question_text
      letterHeight = letter_height*1.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Did X come before Y?
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    CodeComponent question_code
      Code Type = Py
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      Begin Routine:
        choices = [df_trial.target_idx, df_trial.lure_idx]
        if df_trial.correct_pos=='r':
            choices = choices[::-1]


        question_text.text = f'Position\n\n\n\n{cue_text.text}\n\n\n\n'
        question_text.text += '             ?             '.join([str(c+1) for c in choices])
    KeyboardComponent scanner_12
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $question_text.status==FINISHED
      store = all keys
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  Routine cue
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    TextComponent cue_text
      letterHeight = letter_height*1.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy
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    CodeComponent cue_code
      Code Type = Py
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      Begin Routine:
        df_block = df_sequences[df_sequences['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_sequence]

        translation =  {'Haus': 'house',
                        'Gesicht': 'face',
                        'Katze': 'cat',
                        'Schuh': 'shoe',
                        'Stuhl': 'chair'}
        if language=='english':
            cue_text.text = translation[df_trial.cue]
        else:
            cue_text.text = df_trial.cue

        t_isi = df_trial.isi/1000
        t_thisbuffer = t_buffer - (5*0.1 + 5*t_isi)
        msg = f'sequence {i_sequence}/{len(df_block)} '
        msg += f' block {i_block}/{max(df_localizer["block"])}  isi={t_isi} ms, buffer={t_thisbuffer:1f} s'
        msg += f'Expecting choice {df_trial.correct_pos} ({df_trial.target_idx+1})'
        print(msg, flush=True)
      Each Frame:
        if frameN == 0:
            img_idx = trigger_img[df_trial.cue]
    KeyboardComponent scanner_8
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $cue_text.status==FINISHED
      store = all keys
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  Routine feedback
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    TextComponent text_feedback__answer
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_feedbackseq
      Code Type = Py
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      Begin Routine:
        # play for wrong/correct button presses
        # mapping from keys to positions

        mapping = {'r': 'r', 'y': 'd', 'b': 'r', 'g': 'l'}
        if question_key_resp.keys and len(question_key_resp.keys):
            key_pos = mapping[question_key_resp.keys[-1]]
            if key_pos==df_trial.correct_pos:
                sound_correct.stop()
                sound_correct.play()
                reward_count += reward_in_ct
                reward_max += reward_in_ct
                print('Correct answer')
            else:
                sound_wrong.stop()
                sound_wrong.play()
                wrong_answers += 1
                print('Wrong answer')
        else:
            # play error in case of missed button press
            sound_wrong.stop()
            sound_wrong.play()
            misses += 1
            print('Miss')
            #reward_count -= reward_in_ct

        # set the break conditional to true to display a break
        break_conditional_nReps = int(i_block in breaks_after_block)
    KeyboardComponent scanner_13
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_feedback__answer.status==FINISHED
      store = all keys
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  Routine instruct_welcome
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    KeyboardComponent key_resp
      allowedKeys = 'r','g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = stimuli/Gesicht.jpg
      pos = (2, 2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = stimuli/Haus.jpg
      pos = (2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = stimuli/Katze.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = stimuli/Schuh.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = stimuli/Stuhl.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        for i, img in enumerate([image, image_2, image_3, image_4, image_5]):
            img.pos = [(i-2)/4, -0.35]
            img.size = 0.18
    TextboxComponent textbox_3
      alignment = top-center
      bold = False
      borderWidth = 0
      editable = False
      letterHeight = letter_height
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zur Studie
        <b>“Visuelle Objekte Erkennen”</b>

        Das Experiment “Visuelle Objekte Erkennen” besteht aus zwei Aufgaben bei denen wir Ihnen Bilder von alltäglichen Objekten zeigen. Dabei sollen Sie sich immer jedes Bild genau anschauen. Während des Experiments werden Sie abwechselnd zwei verschiedene Aufgaben bearbeiten, die wir Ihnen im Folgenden genau erklären.

        Drücken Sie eine Taste um fortzufahren.
  Routine localizer_feedback
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    KeyboardComponent key_resp_4
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    TextComponent text_feedback
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = ... dummy ... something went wrong
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    CodeComponent feedback_loop
      Code Type = Py
      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, du hast alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit dem tatsächlichen Experiment.\n\n'
            feedback_string += 'Bitte drücke eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Du hast {misses}x verpasst eine Taste bei einem auf dem Kopf stehenden Bild zu drücken.\n'
            if false_alarms:
                feedback_string += f'Du hast {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücke bitte nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls du Fragen hast, stelle diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücke eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
            i_block = 0
    CodeComponent trigger_feedback
      Code Type = Py
      End Routine:
        send_trigger(100, duration=0.005)
        core.wait (0.02)
  Routine instruct_exp2
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    TextComponent text_3
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der zweiten Aufgabe wir Ihnen erst ein Wort gezeigt, das eines der fünf Bilder beschreibt.

        Kurz danach werden ihnen alle fünf Bilder in sehr schneller, zufälliger Reihenfolge abgespielt. Ihre Aufgabe ist es, sich zu merken an welcher Stelle der Gegenstand des vorher gezeigten Wortes ist.
        Die Geschwindigkeit mit der die Bilder gezeigt werden, ist in jedem Durchgang unterschiedlich und wird in einigen Fällen sehr schnell sein.

        Deshalb ist es wichtig, dass Sie sich die Abfolge der Bilder aufmerksamm anschauen und sich die Position merken, an der das vorgegebene Objekt das erste Mal erschienen ist.

        Bitte drücken Sie eine Taste um Fortzufahren.
    KeyboardComponent key_resp_5
      allowedKeys = 'r', 'g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sequence_feedback
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    KeyboardComponent key_resp_6
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_feedback_seq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy... something went wrong
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    CodeComponent code_seqfeedback
      Code Type = Py
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      Begin Routine:
        if wrong_answers==0 and misses==0:
            sequence_repetition.finished=True
            feedback_string = 'Sie haben bei allen drei Sequenzen die richtige Position bestimmt. Gratulation!\n\n'
            feedback_string += 'Die Übung ist nun beendet. Bitte melden Sie sich beim Experimentleiter.\n\n'
            feedback_string += 'Falls Sie noch Fragen haben, stellen Sie diese gerne.'
            text_feedback_seq.text = feedback_string

        else:
            feedback_string = ''
            if wrong_answers:
                feedback_string += f'Sie haben {wrong_answers}x falsch geantwortet. '
            if misses:
                feedback_string += f'Sie haben {misses}x verpasst zu antworten. Bitte antworten Sie schnell genug! '
            feedback_string += '\n\nFalls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback_seq.text = feedback_string

            # reset counters
            wrong_answers = 0
            misses = 0
            i_sequence = 0
  Routine instruct_end
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    TextComponent endtask1
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Die Aufgabe ist nun beendet.

        Bitte melde dich beim Experimentleiter.
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        if language == "english":
            endtask1 = """ The experiment has ended.
            Please let the experimentor know that you are finished."""
  Routine instruct_pre1
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Willkommen zum ersten Teil des Experiments.

        In dieser Aufgabe werden dir nacheinander Bilder gezeigt. Immer wenn ein Bild auf den Kopf gedreht ist, ist es deine Aufgabe so schnell wie möglich eine Taste zu drücken.
        Versuche aufmerksam zu bleiben!
        Bitte antworte jeweils so schnell und genau wie möglich. Wenn das Bild richtig herum ist, drücke bitte keine Taste. Du hast bei jedem Bild 1,5 Sekunden Zeit zu antworten.
        Drücke eine Taste um fortzufahren.
  Routine instruct_pre2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Für eine gute Datenqualität ist es wichtig, dass du während des Experimentes so ruhig wie möglich liegen bleibst. Versuche insbesondere Kopfbewegungen zu minimieren und wenn möglich mit Bewegungen bis zu den Pausen zu warten.

        Es wird nun zunächst ein Übungsdurchlauf folgen.

        Drücke bitte eine Taste um mit einer kurzen Übung der Aufgabe zu starten.
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if language=='english':
            text_4.text=f"""To ensure good data quality, it is important that you remain as still as possible during the experiment. In particular, try to minimize head movements and, if possible, wait until the breaks before making any movements.
            Please try to answer as quickly as possible.A short practice trial will follow now.
            Press any button to start the practice trial."""
  Routine break_2
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    TextComponent text_8
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        <Kurze Pause>

        Bitte nehmen Sie eine kurze Verschnaufpause.

        Drücken Sie eine beliebige Taste, wenn Sie mit dem nächsten Block fortfahren wollen.
    KeyboardComponent key_resp_7
      allowedKeys = 'y', 'r', 'g', 'b'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        print('break started')
        if language=='english':
            text_8.text = f"""<short break>

            Please take a short breather.

            So far you have gained {reward_count} ct bonus.

            Press any button if you want to continue with the next block."""

        if language=='german':
            text_8.text = f"""
        <Kurze Pause>

        Bitte nehmen Sie eine kurze Verschnaufpause.

        Bisher haben Sie {reward_count} ct Bonus erspielt.

        Drücken Sie eine beliebige Taste, wenn Sie mit dem nächsten Block fortfahren wollen."""
      End Routine:
        print('break ended')
        core.wait(0.01)  # wait so trigger can reset
    KeyboardComponent scanner_14
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine lang_select
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  Routine language_selection_screen
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    PolygonComponent english_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (0.5, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent german_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (-0.5, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent german_flag
      durationEstim = 60.0
      flipHoriz = True
      image = stimuli/germanflag.png
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent english_flag
      durationEstim = 60.0
      image = stimuli/englishflag.png
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent german_text
      color = -1.0000, 1.0000, -0.0039
      durationEstim = 60.0
      font = Times New Roman
      letterHeight = letter_height
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Drücke bitte die linke (grüne) Taste für Deutsch.
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    TextComponent english_text
      color = -0.2157, 0.1686, 0.8588
      durationEstim = 60.0
      font = Times New Roman
      letterHeight = letter_height
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Press the right (blue) button for English.
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    KeyboardComponent choice_key
      allowedKeys = 'g','b'
      durationEstim = 60.0
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        if choice_key.keys == "g":
            german_polygon.borderColor = [1, 0.2941, -1]
            language = "german"
        elif choice_key.keys in "br":
            english_polygon.borderColor = [1, 0.2941, -1]
            language = "english"
  Routine wait_for_scanner
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    KeyboardComponent scanner_1
      allowedKeys = 't', "g"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for first scan...
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  Routine practice_trial
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    ImageComponent localizer_image_prac
      durationEstim = 0.5
      image = Bilder Localizer/image_21.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_img_localizer
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    TextComponent localizer_isi_prac
      durationEstim = 2.5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer_prac
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine fixation_cross
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    TextComponent localizer_fixation
      color = $cross_color
      durationEstim = 1.5
      letterHeight = cross_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_fixation_cross
      text = +
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    CodeComponent trigger_fixation
      Code Type = Py
      Begin Routine:
        send_trigger(99, duration=0.005)
  Routine fixation_cross_pre1
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    TextComponent text_6
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = langsame Bildfolge kommt
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    CodeComponent code_dot1
      Code Type = Auto->JS
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      Begin Routine:
        i_localizer=0
        i_sequence=0
        i_block=blocks.thisN
    KeyboardComponent scanner_4
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.85
      store = all keys
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  Routine fixation_cross_pre2
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    TextComponent text_9
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = schnelle Bildfolge kommt
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    CodeComponent code_dot2
      Code Type = Auto->JS
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      Begin Experiment:
        i_localizer=0
        i_sequence=0
    KeyboardComponent scanner_7
      allowedKeys = 't'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = 3.85
      store = all keys
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  Routine WelcomeScreen
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    TextComponent willkommenstext
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Wilkommen zum Experiment:
        "Gedächtniskonsolidierung im Schlaf"

        Vielen Dank, dass du mich bei meiner Masterarbeit unterstützt.
        Bitte drücke einen beliebigen Knopf, um fortzufahren.
    ImageComponent img_welcome
      image = stimuli/Welcome.webp
      pos = (0, -0.2)
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        if language=="english":
            willkommenstext.text = """Welcome to the experiment:
                "Memory consolidation in sleep"
                Thank you very much for supporting me in my masterthesis.
                Please press any button to continue."""
  Routine instructions_overview
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    TextComponent instruct_overview
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Du wirst nun in der nächsten Stunde mehrere Aufgaben erledigen. Insgesamt wirst du mit drei unterschiedlichen Aufgaben konfrontiert. Danach wirst du dich ausruhen können und einen Mittagschlaf machen können. Im Anschluss an den Mittagschlaf wird dein erarbeitetes Wissen noch einmal geprüft und dann hast du es auch schon geschafft.

        Drücke nun einen beliebigen Knopf, um mit einer Einführung in die erste Aufgabe zu starten.
    KeyboardComponent key_resp_9
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        if language =='english':
            instruct_overview.text = """ You will complete several tasks in the next hour.
            You will be faced with a total of three different tasks. Afterwards, you will be able to rest and take a nap. After the nap, the knowledge you have acquired will be tested again.
            Now press any button to start with an introduction to the first task."""
  Routine buff
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    ImageComponent image_6
      image = stimuli/buff.webp
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
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  Routine break_3
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        print('break started')
        if language=='english':
            text.text = f"""<short break>

            Please take a short breather.

            Press any button if you want to continue with the next block."""
      End Routine:
        print('break ended')
        core.wait(0.01)  # wait so trigger can reset
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = Times New Roman
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Eine kurze Pause.

        Bitte nimm eine kurze Verschnaufpause. Sobald du dich wieder bereit fühlst, drücke bitte eine beliebige Taste, um mit der Aufgabe fortzufahren.
    KeyboardComponent key_resp_10
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent trigger_break
      Code Type = Py
      Begin Routine:
        send_trigger(111, duration=0.005)
        core.wait(0.02)
      End Routine:
        send_trigger(222, duration=0.005)
        core.wait(0.02)
  Routine feedback_2
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        # set the break conditional to true to display a break
        break_conditional_nReps = int(i_block in breaks_after_block)
  Routine localizer_prac
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    ImageComponent localizer_img_2
      durationEstim = 1
      size = $image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
      units = height
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    TextComponent localizer_isi_2
      color = -1.0000, -1.0000, -1.0000
      durationEstim = 1.5
      letterHeight = letter_height
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer_2
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    KeyboardComponent key_resp_localizer_2
      allowedKeys = 'y', 'g', 'b', 'r'
      durationEstim = 1.5
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    CodeComponent localizer_code_2
      Code Type = Py
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      Begin Routine:
        df_trial_prac = df_localizer_prac.iloc[i_localizer]
        print (df_trial_prac)

        localizer_img_2.image = "stimuli/" + df_trial_prac.image
        t_isi_localizer_2 = df_trial_prac.iti
        is_distractor = df_trial_prac.distractor

        if is_distractor:
            localizer_img_2.ori  = 180 #image flipped
        else:
            localizer_img_2.ori  = 0

        # prevent inactive sound from blocking trial finish
        sound_correct_2.status = FINISHED
        sound_wrong_2.status = FINISHED
        played = False

        # debug printing
        msg = f'practice {i_localizer}/{len(df_trial_prac)}'
        msg += f' {"[FLIPPED]" if is_distractor else ""} isi={t_isi_localizer:.2f}s'
        log(msg)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer_2.keys) and not played:
            played = True
            if is_distractor:
                sound_correct_2.play()
                log('Correct press')
                responslog.write(session = "practice",trial_num= i_localizer, trial_type= "distractor", response='press', response_type='correct_dis')
            else:
                sound_wrong_2.play()
                false_alarms += 1
                log('False alarm')
                responslog.write(session = "practice",trial_num= i_localizer, trial_type= "no_distractor", response='press', response_type='false_alarm')

        # play error in case of missed button press
        if is_distractor and key_resp_localizer_2.status==FINISHED and not played:
            played = True
            sound_wrong_2.play()
            misses += 1
            log('Miss')
            responslog.write(session = "practice",trial_num= i_localizer, trial_type= "distractor", response='no_press', response_type='miss')


        sound_correct_2.status = FINISHED
        sound_wrong_2.status = FINISHED
      End Routine:
        if not is_distractor and key_resp_localizer_2.status==FINISHED and not played:
            responslog.write(session = "practice",trial_num= i_localizer, trial_type= "no_distractor", response='no_press', response_type='correct')

        i_localizer+=1
    SoundComponent sound_wrong_2
      forceEndRoutine = False
      sound [set every repeat] = stimuli/soundError.wav
      startEstim = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_correct_2
      forceEndRoutine = False
      sound [set every repeat] = stimuli/soundCoin.wav
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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  Routine counting_code
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        i_localizer = 0
        i_block = blocks.thisN
Flow
  Routine startup_code
  Routine language_selection_screen
  Routine WelcomeScreen
  Routine instructions_overview
  Routine buff
  Routine instruct_pre1
  Routine buff
  Routine instruct_pre2
  LoopInitiator localizer_repetition loopType="TrialHandler"
    loopType = random
    nReps = 99
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    LoopInitiator localizer_trials_prac loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials_prac
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      Routine fixation_cross
      Routine localizer_prac
    LoopTerminator localizer_trials_prac
    Routine localizer_feedback
  LoopTerminator localizer_repetition
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = n_blocks
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    Routine counting_code
    LoopInitiator localizer_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials
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      Routine fixation_cross
      Routine localizer
    LoopTerminator localizer_trials
    LoopInitiator break_conditional loopType="TrialHandler"
      loopType = random
      nReps = break_conditional_nReps
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      Routine break_3
    LoopTerminator break_conditional
  LoopTerminator blocks
  Routine instruct_end
